PsychoPy2experiment version="2020.1.0rc1"
Settings
  Audio latency priority = Use prefs
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = psychopy2020responseTimes
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Routines
  Routine trial
    PolygonComponent polygon
      durationEstim = .2
      fillColor = $[1,1,1]
      pos = (0, 0.375)
      shape = regular polygon...
      size = (0.25, 0.25)
      startEstim = .3
      startVal [frame N] = 18
      stopVal [duration (frames)] = 12
      units = height
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    KeyboardComponent key_resp
      allowedKeys = '1'
      durationEstim = .2
      forceEndRoutine = True
      startEstim = .3
      startVal [frame N] = 18
      stopVal [duration (frames)] = 12
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  Routine finalBlank
    TextComponent text_2
      durationEstim = 5
      letterHeight = 0.1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 300
      text = +
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  Routine initBlank
    TextComponent text
      durationEstim = 5
      letterHeight = 0.1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 300
      text = +
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Flow
  Routine initBlank
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine trial
  LoopTerminator trials
  Routine finalBlank
