PsychoPy2experiment version="2020.1.0rc1"
Settings
  Audio latency priority = Use prefs
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = psychopy2020stimTiming
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Routines
  Routine trial
    PolygonComponent polygon
      durationEstim = .2
      fillColor = $[1,1,1]
      pos = (0, 0.375)
      shape = regular polygon...
      size = (0.25, 0.25)
      startEstim = .3
      startVal [frame N] = 18
      stopVal [duration (frames)] = 12
      units = height
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    SoundComponent tone
      durationEstim = .2
      hamming = False
      sound = A
      startEstim = .3
      startVal [frame N] = 18
      stopVal [duration (s)] = .2
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    CodeComponent code
      Code Type = Auto->JS
      Begin Experiment:
        from detect_usb2ttl8 import getUSB2TTL8Devices
        import serial

        usb2ttl8 = getUSB2TTL8Devices()
        if usb2ttl8:
            usb2ttl8=usb2ttl8[0]
        else:
            raise RuntimeError("No USB2TTL8 Devices Detected.")

        # Open serial connection to first detected USB2TTL8 device.
        sconn = serial.Serial(usb2ttl8.get('port'), baudrate=128000, timeout=0.1)
        sconn.write(b"WRITE 0\n")

        ttl = {'status': NOT_STARTED}
      Begin Routine:
        ttl['status'] = NOT_STARTED
      Each Frame:
        if polygon.status == STARTED and ttl['status'] == NOT_STARTED:
            ttl['status'] = STARTED
            win.callOnFlip(sconn.write, b"WRITE 255\n")
      End Routine:
        sconn.write(b"WRITE 0\n")
  Routine initBlank
    TextComponent text
      durationEstim = 5
      letterHeight = 0.1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 300
      text = +
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  Routine finalBlank
    TextComponent endText
      durationEstim = 5
      letterHeight = 0.1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 300
      text = +
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Flow
  Routine initBlank
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine trial
  LoopTerminator trials
  Routine finalBlank
